CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:9722

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:No
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Text that these images have in common (case-sensitive):D.TIF
    Name this loaded image:OrigBlue
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    Extract metadata from where?:None
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    Text that these images have in common (case-sensitive):F.T
    Name this loaded image:OrigGreen
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    Extract metadata from where?:None
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    Text that these images have in common (case-sensitive):R.T
    Name this loaded image:OrigRed
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    Extract metadata from where?:None
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
Crop:[module_num:2|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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:501,700
    Top and bottom rectangle positions:251,450
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:3|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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
Crop:[module_num:4|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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:Edges
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    Select the image with a cropping mask:CropBlue
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Global
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.2
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropGreen
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Discard secondary objects that touch the edge of the image?:No
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:CropBlue
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureTexture:[module_num:10|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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:CropBlue
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Number of angles to compute for Gabor:4

GrayToColor:[module_num:11|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
    Select a color scheme:RGB
    Select the input image to be colored red:CropRed
    Select the input image to be colored green:CropGreen
    Select the input image to be colored blue:CropBlue
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:RGBImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:RGB
    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:13|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Export all measurements?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:No
