CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:9722

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:No
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Text that these images have in common (case-sensitive):D.TIF
    Name this loaded image:OrigBlue
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    Extract metadata from where?:None
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    Text that these images have in common (case-sensitive):F.T
    Name this loaded image:OrigGreen
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    Extract metadata from where?:None
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    Text that these images have in common (case-sensitive):R.T
    Name this loaded image:OrigRed
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    Extract metadata from where?:None
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
Crop:[module_num:2|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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,100
    Top and bottom rectangle positions:1,100
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:3|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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,100
    Top and bottom rectangle positions:1,100
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:4|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
    Select the input image:OrigRed
    Name the output image:CropRed
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,100
    Top and bottom rectangle positions:1,100
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:MoG Global
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.2
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CropGreen
    Select the thresholding method:Otsu Global
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Discard secondary objects that touch the edge of the image?:No
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
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    Retain outlines of the tertiary objects?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:OrigBlue
    Name the primary objects to be identified:NucStain
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:Otsu Global
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.000000,1.000000
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:No
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    Retain outlines of the identified objects?:No
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:NucStain
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:CropBlue
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm

MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:4
    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureTexture:[module_num:12|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
    Hidden:1
    Hidden:3
    Hidden:1
    Select an image to measure:CropBlue
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Select objects to measure:Cytoplasm
    Texture scale to measure:3
    Number of angles to compute for Gabor:4

MeasureCorrelation:[module_num:13|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
    Hidden:2
    Hidden:1
    Select an image to measure:CropBlue
    Select an image to measure:CropGreen
    Select where to measure correlation:Both
    Select an object to measure:Nuclei

MeasureImageGranularity:[module_num:14|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
    Select an image to measure:OrigBlue
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

CalculateMath:[module_num:15|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
    Name the output measurement:Ratio1
    Select the operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Nuclei
    Select the numerator measurement:Intensity_MeanIntensity_CropBlue
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0

MeasureImageIntensity:[module_num:16|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
    Select the image to measure:OrigBlue
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageQuality:[module_num:17|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
    Select an image to measure:OrigBlue
    Check for blur?:Yes
    Window size for blur measurements:80
    Check for saturation?:Yes
    Calculate threshold?:Yes
    Select a thresholding method:Otsu Global
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    Calculate quartiles and sum of radial power spectrum?:Yes
    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
ClassifyObjects:[module_num:18|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
    Should each classification decision be based on a single measurement or on the combination of a pair of measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:AreaShape_Solidity
    Select bin spacing:Evenly spaced bins
    Number of bins:1
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:100.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
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    Enter the object name:Nuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:.5
    Use custom names for the bins?:No
    Enter the low-low bin name:LowLow
    Enter the low-high bin name:HighLow
    Enter the high-low bin name:LowHigh
    Enter the high-high bin name:HighHigh
    Retain an image of the objects classified by their measurements, for use later in the pipeline (for example, in SaveImages)?:No
    Enter the image name:ClassifiedNuclei

GrayToColor:[module_num:19|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
    Select a color scheme:RGB
    Select the input image to be colored red:CropRed
    Select the input image to be colored green:CropGreen
    Select the input image to be colored blue:CropBlue
    Name the output image:RGBImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:RGBImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:RGB
    Select file format to use:tif
    Output file location:Default Output Folder|None
    Image bit depth:8
    Overwrite existing files without warning?:No
    Select how often to save:Every cycle
    Rescale the images? :No
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    Update file names within CellProfiler?:No
    Create subfolders in the output folder?:No

ExportToSpreadsheet:[module_num:21|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Export all measurements?:No
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    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:No
